PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'default'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [2560, 1440]
  color = black
  expName = LexDecTaskCopy
  exportHTML = manually
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Routines
  Routine trial
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        trial_count=trial_count+1
    PolygonComponent fixation_dot
      fillColor = white
      nVertices = 30
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent word
      font = Consolas
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $Stimulus
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    KeyboardComponent response
      allowedKeys = 'f','j'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.0
      storeCorrect = True
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  Routine intro
    TextComponent main_intro_text
      font = Consolas
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You will be shown a string of letters on the screen.
        You need to decide if the letters form a word or not.
        Press the 'j' key if they make a word,
        and the 'f' key if they make a non-word.
        Press any key to continue.
    KeyboardComponent dismiss_intro_text
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine variables
    CodeComponent set_variables
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False
      Begin Routine:
        trial_count = 0
        sum_rt = 0
        sum_acc = 0
    CodeComponent hide_mouse_online
      Code Type = JS
      Begin JS Routine:
        document.documentElement.style.cursor='none'
  Routine phase_intro
    CodeComponent phase_intro_code
      Code Type = Auto->JS
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      Begin Routine:
        if phase == "practice":
            phase_intro_message="First we will start with a few practice trials.\n"+\
        "You will recieve feedback to let you know if you were correct.\n"+\
        "Remember, press 'j' for word and 'f' for nonword.\n"+\
        "Press any key to begin the practice."
        if phase == "experimental":
            phase_intro_message="Now we will start the Experimental trials.\n"+\
        "The instructions are the same.\n"+\
        "Press any key to begin the experiment."
    TextComponent phase_intro_text
      font = Consolas
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $phase_intro_message
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    KeyboardComponent phase_intro_dismiss
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_of_phase
    CodeComponent phase_end_code
      Code Type = Auto->JS
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      Begin Routine:
        if phase == "practice":
            msg="End of practice trials."
            trial_count = 0
        if phase == "experimental":
            msg="End of experiment.\nThank you for taking part."
    TextComponent phase_end_text
      font = Consolas
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $msg
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    CodeComponent code_5
      Code Type = JS
      Begin JS Routine:
        if ((phase === "experimental")) {
            document.documentElement.style.cursor='auto'
        }
  Routine trial_feedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if response.corr == 0:
            feedback_text = "Wrong!"
            feedback_color = "red"
            feedback_duration = 0.75
        if response.corr == 1:
            feedback_text = "Correct!"
            feedback_color = "green"
            feedback_duration = 0.5
        if response.keys:
            this_rt=response.rt
            this_acc=response.corr
        else:
            this_rt=3
            this_acc=0

        sum_rt=sum_rt+this_rt
        mean_rt=sum_rt/trial_count
        sum_acc=sum_acc+this_acc
        mean_acc=sum_acc/trial_count

        thisExp.addData('trial_count_in_block',trial_count)

        thisExp.addData('this_rt',this_rt)
        thisExp.addData('sum_rt',sum_rt)
        thisExp.addData('mean_rt',mean_rt)

        thisExp.addData('this_acc',this_acc)
        thisExp.addData('sum_acc',sum_acc)
        thisExp.addData('mean_acc',mean_acc)
    TextComponent text
      color [set every repeat] = $feedback_color
      font = Consolas
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_duration
      text [set every repeat] = $feedback_text
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  Routine block_feedback
    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        msg = (((((("Your average RT was " + Math.round((mean_rt * 1000))) + "ms.") + "\n\nYour average accuracy was ") + Math.round((mean_acc * 100))) + "%.") + "\n\nPress space to continue.");
        if ((! _pj.in_es6(trial_count, [0,105,210,315,420]))) {
            continueRoutine = false;
        }
      Begin Routine:
        msg="Your average RT was "+str(round(mean_rt*1000))+"ms."+\
        "\n\nYour average accuracy was "+str(round(mean_acc*100))+"%."+\
        "\n\nPress space to continue."
        if trial_count not in [0,105,210,315,420]:
            continueRoutine=False
    TextComponent text_2
      font = Consolas
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_variables
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if trial_count in [0,105,210,315,420]:
            trial_count = 0
            sum_rt=0
            sum_acc=0
            mean_rt=0
            mean_acc=0
Flow
  Routine variables
  Routine intro
  LoopInitiator phases loopType="TrialHandler"
    conditionsFile = phase_control.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'which_spreadsheet': 'practice_definitions.xlsx', 'phase': 'practice'},
      {'which_spreadsheet': 'experimental_definitions.xlsx', 'phase': 'experimental'}]
    Routine phase_intro
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $which_spreadsheet
      loopType = random
      nReps = 1
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      Routine block_variables
      Routine trial
      Routine trial_feedback
      Routine block_feedback
    LoopTerminator trials
    Routine end_of_phase
  LoopTerminator phases
